PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = $subicwait_mon
  Screen = 1
  Units = deg
  Window size (pixels) = [1680, 1050]
  expName = MCT
  logging level = debug
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Routines
  Routine trial
    DotsComponent dots_trial
      coherence [set every repeat] = $thisTrial_loop
      dir = 0
      dotLife = 4
      dotSize = 8.378
      durationEstim = 0.6
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = 11.5996
      nDots = 200
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 36
      units = deg
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    KeyboardComponent key_resp_trial
      allowedKeys = 'up', 'down', 'left', 'right'
      correctAns = $dir_corr
      forceEndRoutine = True
      startEstim = 0
      startVal [frame N] = 0
      storeCorrect = True
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    CodeComponent code_trial
      Code Type = Py
      Begin Experiment:
        # initialize variable for counting the number of correct responses
        correct_counter = 0
      Begin Routine:
        # rand_selector is used to randomly select an angle
        # for the dots' coherent direction, and further down select the corresponding correct
        # response.
        rand_selector = randint(0, 4)
        dots_trial.setDir([0, 90, 180, 270][rand_selector]) # uses rand_selector to select an angle randomly
        dir_corr = ['right', 'up', 'left', 'down'][rand_selector] # uses rand_selector to specify the correct response
      End Routine:
        # trial_loop.addOtherData('key_resp_trial.correct', key_resp_trial.corr)
        trial_loop.addOtherData('correct_direction', dir_corr)
        trial_loop.addOtherData('key_resp_trial.keys', key_resp_trial.keys)

        # add 1 to counter if response was correct
        if key_resp_trial.keys == dir_corr:
            correct_counter += 1
  Routine ready_trial
    TextComponent ready_text
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 27
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      text:
        Den gemensamma riktningen var nedåt.

        Det kan vara väldigt svårt att se vartåt prickarna rör sig! Filmen visas bara en mycket kort stund. Försök att svara så snabbt du kan; du kan också gissa.

        Så snart du gett ett svar så kommer nästa film med prickar att visas. Testet fortsätter så och avslutas automatiskt när du är klar.

        På slutet av testet visas din testpoäng.

        När du trycker på mellanslag så startas testet genast. Prickarna visas en väldigt kort tid, så håll gärna handen redo vid piltangenterna.
    KeyboardComponent ready_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine end_screen
    CodeComponent end_code
      Code Type = Auto->JS
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      Begin Routine:
        # DISABLED
        # prior study had feedback at end, but
        # for synesthesia project it was decided
        # that the feedback might just be demotivating
        # since the task is so hard
        #end_msg = (
        #    'Tack!\n'
        #    f'Du fick {correct_counter} poäng av 180 möjliga.\n'
        #    'Vänligen vänta på att försöksledaren kommer och hjälper dig.'
        #)

        #end_msg = (
        #    'Tack för att du genomförde testet!\n'
        #    'Vänligen vänta på att försöksledaren kommer och hjälper dig.'
        #)

        end_msg = (
            'Tack!\n'
            'Vänligen mata in ditt deltagar-ID för nästa test.'
        )
    TextComponent end_text
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $end_msg
      units = deg
      wrapWidth = 27
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  Routine inter_trial_500ms
    TextComponent iti_placeholder_text
      color = black
      durationEstim = 0.5
      letterHeight = 3
      saveStartStop = False
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 30
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  Routine instructions_screen_4
  Routine instructions_screen_3
    TextComponent instruction_3_text
      letterHeight = 0.8
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 27
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      text:
        I testet kommer en del av prickarna röra sig i en gemensam riktning, precis som i exemplet.

        Din uppgift är att använda piltangenterna på tangentbordet för att ange åt vilket håll prickarna rör sig: åt vänster, höger, uppåt eller neråt. Enbart dessa fyra riktningar är möjliga. Försök att reagera så snabbt som möjligt.

        På nästa skärm får du ett exempel. Försök att se vartåt prickarna går och tryck den motsvarande piltangenten.

        Tryck blanksteg för att komma till exemplet.
    KeyboardComponent instruction_3_keyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine instructions_screen4
    TextComponent instructions_text
      letterHeight = 0.8
      saveStartStop = False
      startEstim = 0.6
      startVal [frame N] = 36
      text = Vilken gemensam riktning tror du att en del av prickarna hade? Tryck den motsvarande piltangenten.
      units = deg
      wrapWidth = 27
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    KeyboardComponent instructions_key_resp
      allowedKeys = 'up', 'right', 'left', 'down'
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 0.6
      startVal [frame N] = 36
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    DotsComponent instructions_dots
      coherence [set every repeat] = .8
      dir = 270
      dotLife = 4
      dotSize = 8.378
      durationEstim = 0.6
      fieldPos = (0.0, 0)
      fieldShape = square
      fieldSize = 11.5996
      nDots = 200
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 36
      units = deg
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  Routine instructions_screen_1
    TextComponent welcome_text
      letterHeight = 0.8
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 27
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      text:
        Instruktioner för rörelsetest

        Det här experimentet mäter din förmåga till att uppfatta rörelser. Det tar cirka fem minuter. Läs vänligen instruktionerna noggrannt!

        I det här testet kommer du att se korta filmer av prickar som rör sig.

        Tryck på tangenten blanksteg (även kallad mellanslag eller space) för att se hur prickarna kan röra sig.
    KeyboardComponent welcome_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    CodeComponent code_monitor_setup
      Code Type = Py
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      Before Experiment:
        # import psychopy module for generating
        # monitor instances.
        from psychopy import monitors

        # create monitor instance for SUBIC outside scanner
        # (waiting room) monitor
        subicwait_mon = monitors.Monitor(
            name='subic_waitroom_monitor',
            width=50.92,
            distance=60,
            notes='Waiting room monitor at SUBIC.')

        # set the pixel width/height of the SUBIC outside
        # scanner monitor
        subicwait_mon.setSizePix([1920, 1080])
    CodeComponent code_instructions1_hidemouse
      Code Type = Auto->JS
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      Begin Routine:
        # hide the mouse cursor (since the mouse
        # isn't used at all during this experiment)
        win.mouseVisible = False
  Routine instructions_screen_2
    TextComponent instructions_text_2
      letterHeight = 0.8
      pos = (0, 5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 27
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      text:
        Nedanför ser du ett exempel. I själva testet kommer du bara att se prickarna en kort stund, och de kommer att röra sig snabbare.

        En del av prickarna rör sig mot en gemensam riktning, nämligen vänster. De andra prickarna rör sig åt olika, slumpmässiga håll.

        Tryck på blanksteg för ytterligare instruktioner.
    KeyboardComponent instructions_key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    DotsComponent instructions_dots_2
      coherence [set every repeat] = .5
      dir = 180
      dotLife = 12
      dotSize = 8.378
      fieldPos = (0.0, -5)
      fieldShape = square
      fieldSize = 9
      nDots = 200
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = .02
      startVal [time (s)] = 0.0
      units = deg
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  Routine store_run_threshold
    CodeComponent code_store_threshold
      Code Type = Py
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      End Routine:
        run_loop.addData("run_end_coherence_value", thisTrial_loop)
Flow
  Routine instructions_screen_1
  Routine instructions_screen_2
  Routine instructions_screen_3
  Routine instructions_screen4
  Routine ready_trial
  LoopInitiator run_loop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator trial_loop loopType="StairHandler"
      N down = 1
      N reversals = 1
      N up = 1
      loopType = staircase
      max value = 1
      min value = 0
      nReps = 60
      start value = 0.5
      step sizes = 0.1
      step type = log
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      Routine trial
      Routine inter_trial_500ms
    LoopTerminator trial_loop
    Routine store_run_threshold
  LoopTerminator run_loop
  Routine end_screen
